PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Nivel1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine nivel
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Nivel 1
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  Routine trial
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    TextComponent instrucciones
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20.0
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      text:
        Después de haber sido un experto en reconocer caras, es hora de pasar al siguiente nivel.

        En esta tarea se mostrará la cara de alguien, presiona el botón que indique cómo crees que se siente la persona (feliz o enojada)
  Routine ISI
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Ensayo
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    ImageComponent imagen
      image [set every repeat] = $estimulo
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = '1', '3'
      correctAns = $respuesta_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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  Routine Fin
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡Debes de estar orgullosa de ti! Lograste diferenciar las primeras dos emociones.
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Flow
  Routine nivel
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Subprueba2_nivel_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'FvsE1', 'respuesta_correcta': 1},
      {'estimulo': 'FvsE2', 'respuesta_correcta': 3},
      {'estimulo': 'FvsE3', 'respuesta_correcta': 1},
      {'estimulo': 'FvsE4', 'respuesta_correcta': 3}]
    Routine ISI
    Routine Ensayo
  LoopTerminator trials
  Routine Fin
