PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Nivel4_tristeza
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine nivel
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Nivel 4
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  Routine ISI
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Ensayo
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  Routine Ensayo_3
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    ImageComponent imagen
      image [set every repeat] = $estimulo
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = '1','3','5','7','8'
      correctAns = $respuesta_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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  Routine trial
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20.0
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      text:
        En este nuevo reto se mostrará la cara de alguien.

        Vas a tener que presionar el botón que indique cómo crees que se siente la persona
         (feliz, enojada, sorprendida, con miedo o triste)
  Routine fin
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Eres muy inteligente

        ¡Has podido identificar cinco emociones!
Flow
  Routine nivel
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Lenovo/Documents/Autismo/Subtarea2_nivel4_miedo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'Miedo3', 'respuesta_correcta': 7},
      {'estimulo': 'Tristeza1', 'respuesta_correcta': 9},
      {'estimulo': 'Trsteza2', 'respuesta_correcta': 9},
      {'estimulo': 'Enojo2', 'respuesta_correcta': 3}]
    Routine ISI
    Routine Ensayo_3
  LoopTerminator trials
  Routine fin
