PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Rec_de_rostros
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent Instrucciones
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20.0
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      text:
        En el reto de hoy te vamos a mostrar dos imágenes en la pantalla.

        Tu objetivo es utilizar las flechas de izquierda y derecha en el teclado, para indicar de que lado se encuentra la cara de una persona.
  Routine Ensayo
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    ImageComponent neutral
      image [set every repeat] = $estimulo
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right',
      correctAns = $respuesta_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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  Routine ISI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fin
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡Lo hiciste muy bien, Carola!
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  Routine nivel
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Nivel 0
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Flow
  Routine nivel
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Subprueba1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'Neutral1', 'respuesta_correcta': 'Izquierda'},
      {'estimulo': 'Neutral2', 'respuesta_correcta': 'Derecha'},
      {'estimulo': 'Neutral3', 'respuesta_correcta': 'Izquierda'},
      {'estimulo': 'Neutral4', 'respuesta_correcta': 'Derecha'}]
    Routine ISI
    Routine Ensayo
  LoopTerminator trials
  Routine fin
